CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:407
GitHash:
ModuleCount:52
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', 'CLICK UPDATE Metadata', 'then UPDATE on the bottom', '', '^(?P<siType>[\\w]*)\\_(?P<stain>[a-zA-Z]*[0-9]*)\\_([0-9]{3})\\_(?P<ProjType>[A-z]{3})', '', '^(?P<ImageName>.*)']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:3
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<ImageName>.*).tif
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Date>[0-9]{8})_514_(?P<siType>[a-zA-Z]*[0-9]*[\W]*[a-zA-Z]*[0-9]*)_(?P<Replicate>Rep[0-9]*)_(?P<ImgNumber>[0-9]*)_
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['Note: channel registration was performed during deconvolution (but there might still be a slight mis-alignement)']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
    Assign a name to:Images matching rules
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    Match metadata:[{'DAPI': 'ImageName', 'TRF1': 'ImageName', 'Lap2a': 'ImageName', 'LB1': 'ImageName'}]
    Image set matching method:Metadata
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does C "0")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (metadata does C "1")
    Name to assign these images:TRF1
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (metadata does C "3")
    Name to assign these images:Lap2a
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (metadata does C "2")
    Name to assign these images:LB1
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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enabled:False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
    Select the input image:DAPI
    Name the output image:DAPI_IllumFunction
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: First cycle
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:120
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
RescaleIntensity:[module_num:6|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notes:['for segmentation of cells from cytoplasmic GFP (no smoothing)']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enabled:False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
    Select the input image:DAPI_IllumFunction
    Name the output image:DAPI_IllumFunctionRescale
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Minimum for each image
    Method to calculate the maximum intensity:Maximum for each image
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    Intensity range for the output image:0.2,1.0
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
CorrectIlluminationApply:[module_num:7|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enabled:False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
    Select the input image:DAPI
    Name the output image:DAPI_IllumCorrected
    Select the illumination function:DAPI_IllumFunctionRescale
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

RescaleIntensity:[module_num:8|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
    Select the input image:DAPI
    Name the output image:DAPI_Rescale
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:9|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
    Select the input image:TRF1
    Name the output image:TRF1_Rescale
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:10|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notes:['for segmentation of DNA (no smoothing)']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
    Select the input image:Lap2a
    Name the output image:Lap2a_Rescale
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:11|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
    Select the input image:LB1
    Name the output image:LB1_Rescale
    Rescaling method:Stretch each image to use the full intensity range
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
Smooth:[module_num:12|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enabled:False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
    Select the input image:DAPI_Rescale
    Name the output image:DAPI_RescaleSmooth
    Select smoothing method:Smooth to Average
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
IdentifyPrimaryObjects:[module_num:13|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notes:['identify NUCLEI', '', 'NOTE: very lowly stained nuclei not identified']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
    Select the input image:DAPI_Rescale
    Name the primary objects to be identified:NucleiUnfiltered
    Typical diameter of objects, in pixel units (Min,Max):50,250
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:0
    Suppress local maxima that are closer than this minimum allowed distance:150
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:Yes
    Select maxima color:yellow
    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:2
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.008,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MeasureObjectSizeShape:[module_num:14|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notes:['to get rid of nuclei that are not completely segmented due to lower intensity at edges', '--> could be removed if manage to correct illumination']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enabled:False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
    Select object sets to measure:NucleiUnfiltered
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExpandOrShrinkObjects:[module_num:15|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
    Select the input objects:NucleiUnfiltered
    Name the output objects:expandedNucleiUnfiltered
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:5
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
MaskImage:[module_num:16|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notes:['to ensure no MN is detected into border nuclei']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
    Select the input image:DAPI_Rescale
    Name the output image:DAPI_NucleiMasked
    Use objects or an image as a mask?:Objects
    Select object for mask:expandedNucleiUnfiltered
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    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:17|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notes:['note: still detect bacterioa --Q> add a filter criteria with LB1 ie keep LB1 positive MN']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
    Select the input image:DAPI_NucleiMasked
    Name the primary objects to be identified:MicroNucleiBacteria
    Typical diameter of objects, in pixel units (Min,Max):5,49
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:20
    Suppress local maxima that are closer than this minimum allowed distance:100
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:Yes
    Select maxima color:yellow
    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.34
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.07,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MeasureObjectSizeShape:[module_num:18|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notes:['filter out bacteria by eccentricity value (elongated and thin)']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
    Select object sets to measure:MicroNucleiBacteria, NucleiUnfiltered
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:19|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notes:['measure LB1 intensity (channel 4)']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enabled:False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
    Select images to measure:LB1
    Select objects to measure:MicroNucleiBacteria

FilterObjects:[module_num:20|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notes:['keep MN that are LB1 positive (bacteria will be negative) MeanLB1 >500', 'OR', 'Use eccentricity < 0.9  ie remove those that are >0.9 such as elongated bacteria']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
    Select the objects to filter:MicroNucleiBacteria
    Name the output objects:MicroNuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Eccentricity
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.9

FilterObjects:[module_num:21|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
    Select the objects to filter:NucleiUnfiltered
    Name the output objects:NucleiFilter1
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Compactness
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:3

FilterObjects:[module_num:22|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notes:['to filter out border nuclei and remove incomplete nuclei']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
    Select the objects to filter:NucleiFilter1
    Name the output objects:Nuclei
    Select the filtering mode:Image or mask border
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    Additional object count:0
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
ExpandOrShrinkObjects:[module_num:23|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notes:['can use that if think that border is not good enough to expand towards cytoplasm']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
    Select the input objects:Nuclei
    Name the output objects:expandedNuclei
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:4
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
ExpandOrShrinkObjects:[module_num:24|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notes:['have periphery --> this object will also be used to measure nucleoplasmic intensity/interior different to whole nucleus and Periphery', 'Note: 1 pixel is 260nm so 4 is about 1um inwards - can change that as you wish']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
    Select the input objects:Nuclei
    Name the output objects:ShrunkenNuclei
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:6
    Fill holes in objects so that all objects shrink to a single point?:No

IdentifyTertiaryObjects:[module_num:25|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notes:['Use âx80x9cexpandedNucleiâx80x9d if want to enlarge band towards cytoplasm', 'Periphery is 4 pixel wide at the moment from nuclei boundary']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
    Select the larger identified objects:expandedNuclei
    Select the smaller identified objects:ShrunkenNuclei
    Name the tertiary objects to be identified:Periphery
    Shrink smaller object prior to subtraction?:Yes

CombineObjects:[module_num:26|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notes:['use expanded nuclei to make sure not to "cut" telomere spots at the periphery']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
    Select initial object set:expandedNuclei
    Select object set to combine:MicroNuclei
    Select how to handle overlapping objects:Merge
    Name the combined object set:CombinedNucleiMN

EnhanceOrSuppressFeatures:[module_num:27|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
    Select the input image:TRF1_Rescale
    Name the output image:TRF1_Enhanced
    Select the operation:Enhance
    Feature size:20
    Feature type:Speckles
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    Speed and accuracy:Fast
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
MaskImage:[module_num:28|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notes:['use NUCLEI as MASK on TRF1 signal -> only take TRF1 signal inside nuclei (expanded by 2 px to avoid cutting TRF1 signal)']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
    Select the input image:TRF1_Enhanced
    Name the output image:TRF1_Masked
    Use objects or an image as a mask?:Objects
    Select object for mask:CombinedNucleiMN
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:29|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notes:['identify Telomere using ROBUST BACKGROUNd: assumes most of the image is BG and you have small area with signal', 'âx80x94> good for spots', 'separate the spots via intensity coz often neighbouring telomeres dont have same intensitz']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
    Select the input image:TRF1_Masked
    Name the primary objects to be identified:Telomere
    Typical diameter of objects, in pixel units (Min,Max):2,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Suppress local maxima that are closer than this minimum allowed distance:2
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:Yes
    Select maxima color:yellow
    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.002,1.0
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    Lower outlier fraction:0.08
    Upper outlier fraction:0.08
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2
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
MeasureObjectSizeShape:[module_num:30|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notes:['Measure the morphology of each nuclei']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
    Select object sets to measure:MicroNuclei, Nuclei, Periphery, ShrunkenNuclei, Telomere
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:31|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notes:['measure intensity on the 3 images: DNA / TRF1 / Lap2a LB1']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
    Select images to measure:DAPI, LB1, Lap2a, TRF1
    Select objects to measure:MicroNuclei, Nuclei, Periphery, ShrunkenNuclei

MeasureObjectIntensity:[module_num:32|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notes:['Telomere: measure only TRF1']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
    Select images to measure:TRF1
    Select objects to measure:Telomere

RelateObjects:[module_num:33|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notes:['if get measurement - will have per nucleus measurements']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
    Parent objects:Nuclei
    Child objects:Telomere
    Calculate child-parent distances?:Minimum
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:34|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notes:['telomeres in MN']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
    Parent objects:MicroNuclei
    Child objects:Telomere
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:35|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
    Parent objects:Periphery
    Child objects:Telomere
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:36|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
    Parent objects:Nuclei
    Child objects:Periphery
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:37|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
    Parent objects:Nuclei
    Child objects:ShrunkenNuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:38|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
    Parent objects:Nuclei
    Child objects:expandedNuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
OverlayOutlines:[module_num:39|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DAPI_Rescale
    Name the output image:Telomere_Nuclei_Periph_DAPIOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:cyan
    Select objects to display:Nuclei
    Select outline color:#00FF40
    Select objects to display:Telomere
    Select outline color:magenta
    Select objects to display:Periphery
    Select outline color:Yellow
    Select objects to display:MicroNuclei

SaveImages:[module_num:40|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
    Select the type of image to save:Image
    Select the image to save:Telomere_Nuclei_Periph_DAPIOverlay
    Select method for constructing file names:Single name
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    Enter single file name:\g<ImageName>-TelomereNucleiPeriph
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|Images\\DAPIOverlay
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
OverlayOutlines:[module_num:41|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:TRF1_Enhanced
    Name the output image:Telomere_Nuclei_Periph_TRF1Overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:cyan
    Select objects to display:Nuclei
    Select outline color:#00FF40
    Select objects to display:Telomere
    Select outline color:magenta
    Select objects to display:Periphery
    Select outline color:Yellow
    Select objects to display:MicroNuclei

SaveImages:[module_num:42|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
    Select the type of image to save:Image
    Select the image to save:Telomere_Nuclei_Periph_TRF1Overlay
    Select method for constructing file names:Single name
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    Enter single file name:\g<ImageName>-TelomereNucleiPeriph
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|Images\\TRF1Overlay
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
DisplayDataOnImage:[module_num:43|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enabled:False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
    Display object or image measurements?:Object
    Select the input objects:MicroNuclei
    Measurement to display:Children_Telomere_Count
    Select the image on which to display the measurements:Telomere_Nuclei_Periph_TRF1Overlay
    Text color:yellow
    Name the output image that has the measurements displayed:Out_TelomereNmb_MN_TRF1
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):-18
    Display mode:Text
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    Display background image?:Yes
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
DisplayDataOnImage:[module_num:44|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enabled:False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
    Display object or image measurements?:Object
    Select the input objects:Periphery
    Measurement to display:Children_Telomere_Count
    Select the image on which to display the measurements:Out_TelomereNmb_MN_TRF1
    Text color:magenta
    Name the output image that has the measurements displayed:Out_TelomereNmb_NE_Cell_TRF1
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):-12
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:45|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:Out_TelomereNmb_MN_TRF1
    Select method for constructing file names:Single name
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    Enter single file name:\g<ImageName>_numbers_Telomere_MN-Periph
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|\g<ImageName>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
OverlayOutlines:[module_num:46|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:LB1_RescaleIntensity
    Name the output image:Nuclei_Overlay_LB1
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:cyan
    Select objects to display:Nuclei

DisplayDataOnImage:[module_num:47|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enabled:False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
    Display object or image measurements?:Object
    Select the input objects:Nuclei
    Measurement to display:AreaShape_FormFactor
    Select the image on which to display the measurements:Nuclei_Overlay_LB1
    Text color:cyan
    Name the output image that has the measurements displayed:Out_Nucleus_Circularity
    Font size (points):10
    Number of decimals:4
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:48|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:Out_Nucleus_Circularity
    Select method for constructing file names:Single name
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    Enter single file name:\g<ImageName>_NucleiCircularity
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|\g<ImageName>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
Tile:[module_num:49|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enabled:False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
    Select an input image:Out_STAIN_Cell_Nucleus_MedIntNucleus
    Name the output image:Tiled_overlays
    Tile assembly method:Within cycles
    Final number of rows:1
    Final number of columns:2
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:No
    Automatically calculate number of rows?:Yes
    Automatically calculate number of columns?:Yes
    Select an additional image to tile:Out_STAIN_PeripheryInt_Cyto
    Select an additional image to tile:Out_TelomereNmb_Nuclei_Cell_TRF1
    Select an additional image to tile:Out_TelomereNmb_NE_Cell_TRF1

SaveImages:[module_num:50|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:Tiled_overlays
    Select method for constructing file names:Single name
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    Enter single file name:\g<ImageName>-Tile
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|\g<ImageName>
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:51|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|_CSV/
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Periphery|AreaShape_Area,Periphery|Intensity_MedianIntensity_Lap2a,Periphery|Intensity_MedianIntensity_TRF1,Periphery|Intensity_MedianIntensity_DAPI,Periphery|Intensity_MedianIntensity_LB1,Periphery|Intensity_MeanIntensity_LB1,Periphery|Intensity_MeanIntensity_DAPI,Periphery|Intensity_MeanIntensity_TRF1,Periphery|Intensity_MeanIntensity_Lap2a,Periphery|Intensity_IntegratedIntensity_DAPI,Periphery|Intensity_IntegratedIntensity_LB1,Periphery|Intensity_IntegratedIntensity_Lap2a,Periphery|Intensity_IntegratedIntensity_TRF1,Periphery|Intensity_MaxIntensity_LB1,Periphery|Intensity_MaxIntensity_DAPI,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:siLap2-BAF_
    Overwrite existing files without warning?:No
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Periphery
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:ShrunkenNuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:MicroNuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Telomere
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

ExportToDatabase:[module_num:52|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enabled:False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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:MyExpt_
    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:DefaultDB.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:None
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    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:MyExpt
    Which objects should be used for locations?:Nuclei
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:Yes
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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